PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change-localization
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Routines
  Routine instructions
    TextComponent text
      durationEstim = 10
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a visual memory task.

        In each trial, you will see a random set of five colored squares for brief moment then the squares will dissapear.

        After a short delay, the squares will reappear, but one of the squares will have a different color than before.

        Please use your mouse to click on the square that changed color.

        Also, please try to look at the center of the screen throughout the experiment.

        Good luck!

        Click anywhere on the screen when you are ready to begin.
    MouseComponent intro_mouse
      durationEstim = 10
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practice
  Routine array
    PolygonComponent fixA
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent stim1
      durationEstim = 1
      fillColor [set every repeat] = $stim_color1
      lineColor [set every repeat] = $stim_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim2
      durationEstim = 1
      fillColor [set every repeat] = $stim_color2
      lineColor [set every repeat] = $stim_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim3
      durationEstim = 1
      fillColor [set every repeat] = $stim_color3
      lineColor [set every repeat] = $stim_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim4
      durationEstim = 1
      fillColor [set every repeat] = $stim_color4
      lineColor [set every repeat] = $stim_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    PolygonComponent stim5
      durationEstim = 1
      fillColor [set every repeat] = $stim_color5
      lineColor [set every repeat] = $stim_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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  Routine probe
    PolygonComponent fixB
      fillColor = $[1,1,1]
      lineWidth = .5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    MouseComponent mouse
      clickable = probe1,probe2,probe3,probe4,probe5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
      syncScreenRefresh = True
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    PolygonComponent probe1
      durationEstim = 1
      fillColor [set every repeat] = $probe_color1
      lineColor [set every repeat] = $probe_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe2
      durationEstim = 1
      fillColor [set every repeat] = $probe_color2
      lineColor [set every repeat] = $probe_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe3
      durationEstim = 1
      fillColor [set every repeat] = $probe_color3
      lineColor [set every repeat] = $probe_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe4
      durationEstim = 1
      fillColor [set every repeat] = $probe_color4
      lineColor [set every repeat] = $probe_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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    PolygonComponent probe5
      durationEstim = 1
      fillColor [set every repeat] = $probe_color5
      lineColor [set every repeat] = $probe_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
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  Routine feedback
    PolygonComponent probe1_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color1
      lineColor [set every repeat] = $probe_color1
      pos [set every repeat] = [x1,y1]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe2_copy
      durationEstim = .5
      fillColor [set every repeat] = $probe_color2
      lineColor [set every repeat] = $probe_color2
      pos [set every repeat] = [x2,y2]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe3_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color3
      lineColor [set every repeat] = $probe_color3
      pos [set every repeat] = [x3,y3]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe4_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color4
      lineColor [set every repeat] = $probe_color4
      pos [set every repeat] = [x4,y4]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    PolygonComponent probe5_copy
      durationEstim = 1
      fillColor [set every repeat] = $probe_color5
      lineColor [set every repeat] = $probe_color5
      pos [set every repeat] = [x5,y5]
      shape = rectangle
      size [set every repeat] = [width,height]
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        click_copy.setPos(mouse.clicked_pos[0],mouse.clicked_pos[1])
    PolygonComponent click_copy
      fillColor = white
      shape = star
      size = (.05, .05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('answer', 4), ('height', 0.05), ('width', 0.05), ('x1', 0.3), ('y1', 0.0), ('stim_color1', '#f0e442'), ('probe_color1', '#f0e442'), ('x2', -0.3), ('y2', 0.0), ('stim_color2', '#0072b2'), ('probe_color2', '#0072b2'), ('x3', 0.15), ('y3', -0.15), ('stim_color3', '#e69f00'), ('probe_color3', '#e69f00'), ('x4', 0.15), ('y4', 0.15), ('stim_color4', '#000000'), ('probe_color4', '#cc79a7'), ('x5', -0.3), ('y5', 0.15), ('stim_color5', '#009e73'), ('probe_color5', '#009e73')]),
      OrderedDict([('trial', 2), ('answer', 2), ('height', 0.05), ('width', 0.05), ('x1', -0.15), ('y1', -0.15), ('stim_color1', '#cc79a7'), ('probe_color1', '#cc79a7'), ('x2', 0.15), ('y2', -0.3), ('stim_color2', '#f0e442'), ('probe_color2', '#d55e00'), ('x3', -0.15), ('y3', 0.0), ('stim_color3', '#009e73'), ('probe_color3', '#009e73'), ('x4', -0.15), ('y4', 0.15), ('stim_color4', '#e69f00'), ('probe_color4', '#e69f00'), ('x5', -0.3), ('y5', -0.3), ('stim_color5', '#0072b2'), ('probe_color5', '#0072b2')]),
      OrderedDict([('trial', 3), ('answer', 3), ('height', 0.05), ('width', 0.05), ('x1', 0.0), ('y1', -0.15), ('stim_color1', '#009e73'), ('probe_color1', '#009e73'), ('x2', 0.15), ('y2', -0.3), ('stim_color2', '#d55e00'), ('probe_color2', '#d55e00'), ('x3', 0.15), ('y3', 0.3), ('stim_color3', '#0072b2'), ('probe_color3', '#f0e442'), ('x4', -0.3), ('y4', 0.3), ('stim_color4', '#e69f00'), ('probe_color4', '#e69f00'), ('x5', -0.15), ('y5', -0.3), ('stim_color5', '#56b4e9'), ('probe_color5', '#56b4e9')]),
      OrderedDict([('trial', 4), ('answer', 3), ('height', 0.05), ('width', 0.05), ('x1', 0.0), ('y1', -0.3), ('stim_color1', '#0072b2'), ('probe_color1', '#0072b2'), ('x2', -0.3), ('y2', -0.3), ('stim_color2', '#e69f00'), ('probe_color2', '#e69f00'), ('x3', 0.0), ('y3', 0.0), ('stim_color3', '#cc79a7'), ('probe_color3', '#009e73'), ('x4', 0.3), ('y4', 0.0), ('stim_color4', '#000000'), ('probe_color4', '#000000'), ('x5', 0.15), ('y5', 0.0), ('stim_color5', '#f0e442'), ('probe_color5', '#f0e442')])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
    Routine array
    Routine probe
    Routine feedback
  LoopTerminator trials
